PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = OCD_1ed_withbuilder
  Screen = 1
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Routines
  Routine trialPrac
    TextComponent text_2
      color [set every repeat] = white
      text [set every repeat] = $words1
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'l','s'
      startVal [time (s)] = 0.5
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    TextComponent text_10
      text = ?
      startVal [time (s)] = 0.8
      letterHeight = 0.1
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  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Richtig! RT=%.3f" %(resp.rt)
        else:
          msg="Ooops! Das war falsch"
    TextComponent feedback_1
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Trial
    TextComponent text_4
      text [set every repeat] = $words1
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'l','s'
      startVal [time (s)] = 0.5
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    TextComponent text_11
      text = ?
      startVal [time (s)] = 0.8
      letterHeight = 0.1
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  Routine InstructExp
    TextComponent text_5
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Das war der Übungsdurchgang.

        Jetzt folgt der richtige Versuch.

        Noch einmal zur Erinnerung:
        Tiernamen - grüne Taste (rechte Seite)
        alle anderen Namen - rote Taste (linke Seite)

        Bei Fragen wenden Sie sich bitte an die Versuchsleitung.

        Starten Sie den Versuch mit dem Drücken einer beliebeigen Taste.

        Viel Erfolg!
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ThankYou
    TextComponent ThankY
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Das Experiment ist nun beendet.

        Danke für die Teilnahme!

        Wenden Sie sich bitte an die Versuchsleitung!
  Routine Instruct2
    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Bitte legen Sie ihren rechten Zeigefinge auf die grüne Taste und den linken Zeigefinger auf die rote Taste und lassen Sie die Finger die ganze Aufgabe über dort ruhen.

        Bevor das Experiment anfängt durchlaufen Sie erstmal einen Probedurchlauf, ob Sie die Anleitung verstanden haben.

        Für weitere Fragen wenden Sie sich bitte an die Versuchsleitung.

        Den Probedurchlauf beginnen Sie mit dem Drücken einer beliebiger Taste...
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruct1
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        ANLEITUNG

        Liebe Teilnehmer vielen Dank, dass Sie durch Ihre Teilnahme einen wertvollen Beitrag zu unserer Forschung leisten!

        Im Folgenden werden wir Ihnen eine Vielzahl von Wörtern präsentieren. Ihre Aufgabe wird es sein, die präsentierten Tierwörter als solche zu identifizieren. Drücken Sie bitte dafür immer die grüne Taste (rechte Seite).
        Ist das Wort keines, welches ein Tier beschreibt dann drücken Sie bitte die rote Taste (links).

        Weiter mit drücken beliebiger Taste...
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine threetwoone
    TextComponent text_7
      text = 3
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_8
      text = 2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent text_9
      text = 1
      stopVal [duration (s)] = 1
      startVal [time (s)] = 2
      letterHeight = 0.1
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  Routine fixat
    TextComponent text_3
      text = +
      stopVal [duration (s)] = .998
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine Instruct1
  Routine Instruct2
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = trialListPrac.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('words1', u'Haase'), ('corrAns', u'l'), ('stimType', u'target'), ('stimID', 100)]),
      OrderedDict([('words1', u'Maus'), ('corrAns', u'l'), ('stimType', u'target'), ('stimID', 101)]),
      OrderedDict([('words1', u'Auto'), ('corrAns', u's'), ('stimType', u'stand'), ('stimID', 200)]),
      OrderedDict([('words1', u'Ofen'), ('corrAns', u's'), ('stimType', u'stand'), ('stimID', 201)]),
      OrderedDict([('words1', u'Tisch'), ('corrAns', u's'), ('stimType', u'stand'), ('stimID', 202)]),
      OrderedDict([('words1', u'Baum'), ('corrAns', u's'), ('stimType', u'stand'), ('stimID', 203)]),
      OrderedDict([('words1', u'Rasen'), ('corrAns', u's'), ('stimType', u'stand'), ('stimID', 204)])]
    Routine fixat
    Routine trialPrac
    Routine feedback
  LoopTerminator practice
  Routine InstructExp
  Routine threetwoone
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('words1', u'Haase'), ('corrAns', u'l'), ('stimType', u'target'), ('stimID', 100)]),
      OrderedDict([('words1', u'Maus'), ('corrAns', u'l'), ('stimType', u'target'), ('stimID', 101)]),
      OrderedDict([('words1', u'Igel'), ('corrAns', u'l'), ('stimType', u'target'), ('stimID', 102)]),
      OrderedDict([('words1', u'Gazelle'), ('corrAns', u'l'), ('stimType', u'target'), ('stimID', 103)]),
      OrderedDict([('words1', u'Schaaf'), ('corrAns', u'l'), ('stimType', u'target'), ('stimID', 104)]),
      OrderedDict([('words1', u'Auto'), ('corrAns', u's'), ('stimType', u'stand'), ('stimID', 200)]),
      OrderedDict([('words1', u'Ofen'), ('corrAns', u's'), ('stimType', u'stand'), ('stimID', 201)]),
      OrderedDict([('words1', u'Tisch'), ('corrAns', u's'), ('stimType', u'stand'), ('stimID', 202)]),
      OrderedDict([('words1', u'Baum'), ('corrAns', u's'), ('stimType', u'stand'), ('stimID', 203)]),
      OrderedDict([('words1', u'Rasen'), ('corrAns', u's'), ('stimType', u'stand'), ('stimID', 204)]),
      OrderedDict([('words1', u'Ubahn'), ('corrAns', u's'), ('stimType', u'probe'), ('stimID', 300)]),
      OrderedDict([('words1', u'Toilette'), ('corrAns', u's'), ('stimType', u'probe'), ('stimID', 301)]),
      OrderedDict([('words1', u'Bakterien'), ('corrAns', u's'), ('stimType', u'probe'), ('stimID', 302)]),
      OrderedDict([('words1', u'Sieben'), ('corrAns', u's'), ('stimType', u'probe'), ('stimID', 303)]),
      OrderedDict([('words1', u'Waschen'), ('corrAns', u's'), ('stimType', u'probe'), ('stimID', 304)])]
    Routine fixat
    Routine Trial
  LoopTerminator trials
  Routine ThankYou
